graphs:

  # The publish/subscribe broker graph
  - id: PubSubBroker
    nodes:
      - id: Broker
        module: timeflux.nodes.zmq
        class: Broker

  # The main processing graph
  - id: Processing
    nodes:
      - id: LSL
        module: timeflux.nodes.lsl
        class: Receive
        params:
          prop: name
          value: Micromed

      - id: Rolling
        module: timeflux.nodes.window
        class: Window
        params:
          length: 1.5
          step: 0.5
     
      - id: Welch
        module: timeflux_dsp.nodes.spectral
        class: Welch

      - id: Bands
        module: timeflux_dsp.nodes.spectral
        class: Bands
        params: 
          bands:
            alpha: [8, 12]
            
      - id: PublisherRaw
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: raw

      - id: PublisherBands
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: bands
     
      - id: VisualFeedbackAvatar
        module: avatar_automatically 
        class: VisualFeedbackAvatar

      - id: RandomPrompt
        module: random_prompt
        class: RandomPrompt

      - id: AlphaMarker
        module: alpha_marker_shutdown
        class: AlphaMarker

    edges:
      - source: LSL
        target: Rolling
      - source: Rolling
        target: Welch
      - source: Welch
        target: Bands
      - source: Bands:alpha
        target: VisualFeedbackAvatar
      - source: LSL
        target: PublisherRaw
      - source: Bands:alpha
        target: PublisherBands
      - source: Bands:alpha
        target: AlphaMarker
      - source: Bands:alpha
        target: RandomPrompt

    rate: 25

  # The recorder graph
  - id: SaveToFile
    nodes:
      - id: Subscriber
        module: timeflux.nodes.zmq
        class: Sub
        params:
          topics:
          - raw
          - bands
        outputs: 
          - name: raw
            data_type: dataframe
          - name: bands
            data_type: dataframe 

      - id: RecorderRaw
        module: timeflux.nodes.hdf5
        class: Save
        params:
         path: "/Users/Sophia/hdf5/raw"
        inputs: 
          - name: eeg_raw
            data_type: dataframe
 
      - id: RecorderBands
        module: timeflux.nodes.hdf5
        class: Save
        params:
          path: "/Users/Sophia/hdf5/bands"
        inputs: 
          - name: eeg_bands
            data_type: dataframe 

    edges:
      - source: Subscriber:raw
        target: RecorderRaw:eeg_raw
      - source: Subscriber:bands
        target: RecorderBands:eeg_bands

    rate: 1
